CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file does contain "-ch2") (file doesnot contain "._") (file does contain "r01")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<WellRow>\d{2})c(?P<WellColumn>\d{2})f(?P<Field>\d{2})p(?P<Stack>\d{2})-ch(?P<ChannelNumber>\d)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:brightfield
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Well
    Metadata category:Field

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:brightfield
    Name the output image:brightfieldC
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:Yes
    Name the averaged image:IllumBlueAvg
    Retain the dilated image?:Yes
    Name the dilated image:IllumBlueDilated
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:brightfield
    Name the output image:brightfieldCA
    Select the illumination function:brightfieldC
    Select how the illumination function is applied:Divide

SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:brightfieldCA
    Select method for constructing file names:From image filename
    Select image name for file prefix:brightfield
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:ff_stack
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|ff
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:brightfieldC
    Select method for constructing file names:From image filename
    Select image name for file prefix:brightfield
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:ffct
    Saved file format:npy
    Output file location:Default Output Folder sub-folder|ffct
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CorrectIlluminationCalculate:[module_num:9|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enabled:False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
    Select the input image:brightfield
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Convex Hull
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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enabled:False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
    Select the input image:brightfield
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide
