CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file does contain "-ch1") (file doesnot contain "._") (file doesnot contain "INCOMPLETE_INCOMPLETE")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<WellRow>\d{2})c(?P<WellColumn>\d{2})f(?P<Field>\d{2})p(?P<Stack>\d{2})-ch(?P<ChannelNumber>\d)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<measurment>\d+.+Measurement.+)\/.+
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<file_name>.+)(?P<file_type>.tiff)$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:phase_contrast
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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enabled:False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
    Select the input image:phase_contrast
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:Yes
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:phase_contrast
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:10
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

SaveCroppedObjects:[module_num:7|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
    Objects:IdentifyPrimaryObjects
    Directory:Default Output Folder sub-folder|\g<measurment>/\g<file_name>
    Saved file format:tiff
