CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Downloads
    Name of the file:Book1.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:fld,channel,parent,timepoint,well
    Rescale intensities?:Yes

Smooth:[module_num:2|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
    Select the input image:dpc
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:Yes
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
IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:FilteredImage
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2.7
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:4|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
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:brightfield
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ConvertObjectsToImage:[module_num:5|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
    Select the input objects:IdentifyPrimaryObjects
    Name the output image:CellImage
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:6|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
    Select the input objects:IdentifySecondaryObjects
    Name the output image:CellImage_2
    Select the color format:Grayscale
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
SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:Single name
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    Enter single file name:segmentation_\g<parent>_\g<timepoint>_\g<well>_\g<fld>_\g<channel>
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:CellImage_2
    Select method for constructing file names:Single name
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    Enter single file name:segmentation2_\g<parent>_\g<timepoint>_\g<well>_\g<fld>_\g<channel>
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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