CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|/metadata
    Name of the file:metadata_bf.csv
    Load images based on this data?:Yes
    Base image location:None|/inbox/703__2018-11-07T20_55_16-Measurement_1/Images
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:fld,channel,parent,timepoint,well
    Rescale intensities?:Yes

ImageMath:[module_num:2|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enabled:False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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
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    Multiply the first image by:1.0
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    Image or measurement?:Image
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
CorrectIlluminationCalculate:[module_num:3|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
    Select the input image:brightfield
    Name the output image:brightfieldC
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:135
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:4|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
    Select the input image:brightfield
    Name the output image:brightfieldCA
    Select the illumination function:brightfieldC
    Select how the illumination function is applied:Divide

SaveImages:[module_num:5|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
    Select the type of image to save:Image
    Select the image to save:brightfieldCA
    Select method for constructing file names:From image filename
    Select image name for file prefix:brightfield
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_flatfield
    Saved file format:tiff
    Output file location:Default Output Folder|ff
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CorrectIlluminationCalculate:[module_num:6|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enabled:False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
    Select the input image:brightfield
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Convex Hull
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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enabled:False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
    Select the input image:brightfield
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide
