CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|/Users/nrindtor/bucket/metadata/000012077803__2019-01-29T12_50_08-Measurement_2/
    Name of the file:metadata_000012077803__2019-01-29T12_50_08-Measurement_2_pc_A16.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:fld,channel,parent,timepoint,well
    Rescale intensities?:Yes

Smooth:[module_num:2|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
    Select the input image:brightfield
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:Yes
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
IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:FilteredImage
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2.7
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

ExportToSpreadsheet:[module_num:4|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:pc_xy
    Overwrite existing files without warning?:Yes
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
SaveImages:[module_num:5|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enabled:False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
    Select the type of image to save:Mask
    Select the image to save:FilteredImage
    Select method for constructing file names:From image filename
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveCroppedObjects:[module_num:6|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
    Objects:IdentifyPrimaryObjects
    Directory:Default Output Folder
    Saved file format:tiff

ExportToDatabase:[module_num:7|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enabled:False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
    Database type:MySQL / CSV
    Database name:DefaultDB
    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    SQL file prefix:SQL_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
    Database host:
    Username:cpdb
    Password:cpdb
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    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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