CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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enabled:False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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
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    Multiply the first image by:1.0
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    Image or measurement?:Image
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
CorrectIlluminationCalculate:[module_num:6|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enabled:False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
    Select the input image:brightfield
    Name the output image:brightfieldC
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:135
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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enabled:False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
    Select the input image:brightfield
    Name the output image:brightfieldCA
    Select the illumination function:brightfieldC
    Select how the illumination function is applied:Divide

isl_preprocess_brightfield:[module_num:8|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
    Select the input image:DNA
    Name the output image:brightfieldCAP
    Mean:0.5
    Standard Deviation:0.125

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:brightfieldCAP
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_flatfield
    Saved file format:png
    Output file location:Default Output Folder|ff
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MakeProjection:[module_num:10|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
    Select the input image:DNA
    Type of projection:Variance
    Name the output image:brightfield_proj
    Frequency:6.0

SaveImages:[module_num:11|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:brightfield_proj
    Select method for constructing file names:From image filename
    Select image name for file prefix:brightfield
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_projection
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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